PsychoPy2experiment version="2025.2.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['Возраст'], expInfo['Пол'], expInfo['date'])
  Enable Escape = False
  Experiment info = {'Возраст': '', 'Пол': '["М","Ж"]', 'Является ли русский Вашим родным языком?': '["Да","Нет"]'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  color = white
  expName = online_sen
  keyboardBackend = PsychToolbox
  runMode = 0
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Routines
  Routine instr_tr_1
    RoutineSettingsComponent instr_tr_1
      saveStartStop = False
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    CodeComponent code
      Code Type = Auto->JS
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      Begin Experiment:
        nTr1 = 1
        nTr2 = 1
        nTr3 = 1
        nTr4 = 1
        nTr5 = 1
        nTr6 = 1
        nTr7 = 1
        win.mouseVisible = False
      Begin Routine:
        head_tr_1.alignText = 'left'
        head_tr_1.italic = True
        body_tr_1.alignText = 'left'
      End Routine:
        if key_resp.keys == 'right':
            nTr2 = 1
    TextComponent num_inst_tr_1
      color = black
      letterHeight = 0.025
      pos = (0.725, 0.43)
      startVal [time (s)] = 0.0
      text = 1/6
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    TextComponent title_tr_1
      color = black
      letterHeight = 0.085
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Инструкция
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    TextComponent head_tr_1
      color = black
      letterHeight = 0.065
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = В чем суть заданий?
      wrapWidth = 1.4
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    TextComponent body_tr_1
      color = black
      letterHeight = 0.05
      pos = (0, -0.075)
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        Вам будут предъявляться неполные предложения
        с описанием некоторой ситуации.
        Ваша цель – понять, какое пропущено слово / словосочетание, поясняющее суть ситуации.

        Пример предложения:
        Гусеницы были старые, потому что у фермера не было денег
        Ответ:
        Трактор
    TextComponent text_arrow_tr_1
      color = black
      letterHeight = 0.03
      pos = (0, -0.455)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Используйте стрелки, чтобы перемещаться между листами инструкции
      wrapWidth = 1.6
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    PolygonComponent arrow_right_tr_1
      fillColor = white
      lineColor = black
      ori = 90
      pos = (0.75, -0.45)
      saveStartStop = False
      shape = arrow
      size = (0.03, 0.05)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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  Routine instr_tr_2
    RoutineSettingsComponent instr_tr_2
      saveStartStop = False
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    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        head_tr_2.alignText = 'left'
        head_tr_2.italic = True
        body_tr_2.alignText = 'left'
      End Routine:
        if key_resp_2.keys == 'right':
            nTr3 = 1

        elif key_resp_2.keys == 'left':
            nTr3 = 0
            nTr4 = 0
            nTr5 = 0
            nTr6 = 0
            nTr7 = 0
            nTr1 = 1
    TextComponent num_inst_tr_2
      color = black
      letterHeight = 0.025
      pos = (0.725, 0.43)
      startVal [time (s)] = 0.0
      text = 2/6
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    TextComponent title_tr_2
      color = black
      letterHeight = 0.085
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Инструкция
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    TextComponent head_tr_2
      color = black
      letterHeight = 0.065
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = Как отвечать?
      wrapWidth = 1.4
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    TextComponent body_tr_2
      color = black
      letterHeight = 0.05
      pos = (0, -0.022)
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        - Перед Вами появится предложение на 30 секунд.
        - Если Вы найдете решение (пропущенное слово) нажмите «ПРОБЕЛ»
        - После нажатия у Вас появиться поле, куда нужно вписать ответ.
        - Чтобы отправить ответ, нажмите мышкой на кнопку «ОТВЕТИТЬ»
    TextComponent text_arrow_tr
      color = black
      letterHeight = 0.03
      pos = (0, -0.455)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Используйте стрелки, чтобы перемещаться между листами инструкции
      wrapWidth = 1.6
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    PolygonComponent arrow_right_tr
      fillColor = white
      lineColor = black
      ori = 90
      pos = (0.75, -0.45)
      saveStartStop = False
      shape = arrow
      size = (0.03, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent arrow_left_tr_1
      fillColor = white
      lineColor = black
      ori = 270
      pos = (-0.75, -0.45)
      saveStartStop = False
      shape = arrow
      size = (0.03, 0.05)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_2
      allowedKeys = 'right','left'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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  Routine instr_tr_3
    RoutineSettingsComponent instr_tr_3
      saveStartStop = False
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    CodeComponent code_3
      Code Type = Auto->JS
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      Begin Routine:
        head_tr_3.alignText = 'left'
        head_tr_3.italic = True
        body_tr_3.alignText = 'left'
      End Routine:
        if key_resp_3.keys == 'right':
            nTr5 = 1

        elif key_resp_3.keys == 'left':
            nTr1 = 0
            nTr2 = 0
            nTr3 = 1
            nTr5 = 0
            nTr6 = 0
            nTr7 = 0
    TextComponent num_inst_tr_3
      color = black
      letterHeight = 0.025
      pos = (0.725, 0.43)
      startVal [time (s)] = 0.0
      text = 4/6
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    TextComponent title_tr_3
      color = black
      letterHeight = 0.085
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Инструкция
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    TextComponent head_tr_3
      color = black
      letterHeight = 0.065
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = Что будет после?
      wrapWidth = 1.4
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    TextComponent body_tr_3
      color = black
      letterHeight = 0.05
      pos = (0, -0.022)
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        1. Перед Вами появиться вопрос о том, испытали ли Вы «Ага-переживание» при нахождении ответа;
        2. После отчета о наличии / отсутствии «Ага-переживания» нужно будет оценить уверенность в своем ответе.

        Ответы нужно давать с помощью мышки, нажав на один из вариантов (да / нет)
    TextComponent text_arrow_tr_2
      color = black
      letterHeight = 0.03
      pos = (0, -0.455)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Используйте стрелки, чтобы перемещаться между листами инструкции
      wrapWidth = 1.6
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    PolygonComponent arrow_right_tr_2
      fillColor = white
      lineColor = black
      ori = 90
      pos = (0.75, -0.45)
      saveStartStop = False
      shape = arrow
      size = (0.03, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent arrow_left_tr
      fillColor = white
      lineColor = black
      ori = 270
      pos = (-0.75, -0.45)
      saveStartStop = False
      shape = arrow
      size = (0.03, 0.05)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_3
      allowedKeys = 'right','left'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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  Routine instr_tr_4
    RoutineSettingsComponent instr_tr_4
      saveStartStop = False
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    CodeComponent code_4
      Code Type = Auto->JS
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      Begin Routine:
        head_tr_4.alignText = 'left'
        head_tr_4.italic = True
        body_tr_4.alignText = 'left'
      End Routine:
        if key_resp_4.keys == 'right':
            nTr6 = 1

        elif key_resp_4.keys == 'left':
            nTr1 = 0
            nTr2 = 0
            nTr3 = 0
            nTr4 = 1
            nTr6 = 0
            nTr7 = 0
    TextComponent num_inst_tr_4
      color = black
      letterHeight = 0.025
      pos = (0.725, 0.43)
      startVal [time (s)] = 0.0
      text = 5/6
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    TextComponent title_tr_4
      color = black
      letterHeight = 0.085
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Инструкция
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    TextComponent head_tr_4
      color = black
      letterHeight = 0.065
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = Что после оценки уверенности?
      wrapWidth = 1.4
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    TextComponent body_tr_4
      color = black
      letterHeight = 0.05
      pos = (0, -0.022)
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text [set every repeat]:
        Появится правильный ответ, который нужно будет оценить, ответив на вопрос: «Совпадает ли он с Вашим?»

        Для ответа нажмите на один из вариантов:
        - Если нажмете «ДА», то появится следующая задача;
        - Если нажмете «НЕТ», то нужно будет оценить было ли «Ага-переживание» при знакомстве с ответом.
    TextComponent text_arrow_tr_3
      color = black
      letterHeight = 0.03
      pos = (0, -0.455)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Используйте стрелки, чтобы перемещаться между листами инструкции
      wrapWidth = 1.6
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    PolygonComponent arrow_right_tr_3
      fillColor = white
      lineColor = black
      ori = 90
      pos = (0.75, -0.45)
      saveStartStop = False
      shape = arrow
      size = (0.03, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent arrow_left_tr_2
      fillColor = white
      lineColor = black
      ori = 270
      pos = (-0.75, -0.45)
      saveStartStop = False
      shape = arrow
      size = (0.03, 0.05)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_4
      allowedKeys = 'right','left'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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  Routine instr_tr_5
    RoutineSettingsComponent instr_tr_5
      saveStartStop = False
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    CodeComponent code_5
      Code Type = Auto->JS
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      Begin Routine:
        head_tr_5.alignText = 'left'
        head_tr_5.italic = True
        body_tr_5.alignText = 'left'
      End Routine:
        if key_resp_5.keys == 'right':
            nTr7 = 1

        elif key_resp_5.keys == 'left':
            nTr1 = 0
            nTr2 = 0
            nTr3 = 0
            nTr4 = 0
            nTr5 = 1
            nTr7 = 0
    TextComponent num_inst_tr_5
      color = black
      letterHeight = 0.025
      pos = (0.725, 0.43)
      startVal [time (s)] = 0.0
      text = 6/6
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    TextComponent title_tr_5
      color = black
      letterHeight = 0.085
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Инструкция
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    TextComponent head_tr_5
      color = black
      letterHeight = 0.065
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = Описание “Ага-переживания”
      wrapWidth = 1.4
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    TextComponent body_tr_5
      color = black
      letterHeight = 0.05
      pos = (0, -0.075)
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        Это чувство, когда Вы внезапно понимаете решение задачи.
        Оно характеризуется переживанием ВНЕЗАПНОСТИ перехода от непонимания к пониманию и ПОЗИТИВНЫМИ эмоциями (Ага! Точно! Вот оно!).

        При этом, “Ага-переживание” может возникать как при самостоятельном решении задачи, так и при знакомстве с ответом (Так вот какой ответ!).
    TextComponent text_arrow_tr_4
      color = black
      letterHeight = 0.03
      pos = (0, -0.455)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Используйте стрелки, чтобы перемещаться между листами инструкции
      wrapWidth = 1.6
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    PolygonComponent arrow_right_tr_4
      fillColor = white
      lineColor = black
      ori = 90
      pos = (0.75, -0.45)
      saveStartStop = False
      shape = arrow
      size = (0.03, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent arrow_left_tr_3
      fillColor = white
      lineColor = black
      ori = 270
      pos = (-0.75, -0.45)
      saveStartStop = False
      shape = arrow
      size = (0.03, 0.05)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_5
      allowedKeys = 'right','left'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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  Routine instr_tr_6
    RoutineSettingsComponent instr_tr_6
      saveStartStop = False
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    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        head_tr_2.alignText = 'left'
        head_tr_2.italic = True
        body_tr_2.alignText = 'left'
      End Routine:
        if key_resp_6.keys == 'space':
            trials_1.finished = True

        elif key_resp_6.keys == 'left':
            nTr1 = 0
            nTr2 = 0
            nTr3 = 0
            nTr4 = 0
            nTr5 = 0
            nTr6 = 1
    TextComponent head_tr
      color = black
      letterHeight = 0.065
      startVal [time (s)] = 0.0
      text = Нажмите “ПРОБЕЛ”, чтобы начать тренировочный блок
      wrapWidth = 1.3
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    TextComponent text_arrow_tr_5
      color = black
      letterHeight = 0.03
      pos = (0, -0.455)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Используйте стрелки, чтобы перемещаться между листами инструкции
      wrapWidth = 1.6
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    PolygonComponent arrow_left_tr_4
      fillColor = white
      lineColor = black
      ori = 270
      pos = (-0.75, -0.45)
      saveStartStop = False
      shape = arrow
      size = (0.03, 0.05)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_6
      allowedKeys = 'space','left'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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  Routine tr_1
    RoutineSettingsComponent tr_1
      saveStartStop = False
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    TextComponent cross_tr
      color = black
      letterHeight = 0.085
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Experiment:
        n_trial_tr = 0

        nTr11 = 0
        nTr12 = 0
        nTr13 = 0
        nTr14 = 0
        nTr15 = 0
        nTr16 = 0
        nTr17 = 0
        nTr18 = 0
        nTr19 = 0
      Begin Routine:
        win.mouseVisible = False
      End Routine:
        n_trial_tr += 1

        nTr11 = 0
        nTr12 = 0
        nTr13 = 0
        nTr14 = 0
        nTr15 = 0
        nTr16 = 0
        nTr17 = 0
        nTr18 = 0
        nTr19 = 0
  Routine tr_2
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    TextComponent num_tr
      color = black
      letterHeight = 0.025
      pos = (0.725, 0.43)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      text [set every repeat] = $str(n_trial_tr)+'/5'
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    TextComponent senten_tr
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      text [set every repeat] = $sen_tr
      wrapWidth = 1.3
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    TextComponent text_answ_tr
      color = black
      letterHeight = 0.035
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
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      text:
        Нашел ответ
        “ПРОБЕЛ”
    KeyboardComponent key_resp_7
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [duration (s)] = 29.5
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    TextComponent text_slow_tr
      color = Black
      letterHeight = 0.08
      startVal [time (s)] = 30.0
      stopVal [duration (s)] = 0.8
      text = Время закончилось
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    CodeComponent code_7
      Code Type = Auto->JS
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      End Routine:
        if key_resp_7.keys == 'space':
            nTr11 = 1
            nTr13 = 1

        else:
            nTr15 = 1
            nTr18 = 1
  Routine tr_3
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    CodeComponent code_9
      Code Type = JS
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      Begin JS Routine:
        psychoJS.window.mouseVisible = true;
      Each JS Frame:
        if ((entr_ans_tr.text && entr_ans_tr.text.trim())) {
            button_entr_ans_tr.setAutoDraw(true);
        } else {
            button_entr_ans_tr.setAutoDraw(false);
        }
    TextComponent entr_ans_txt_tr
      color = black
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Введите слово / словосочетание поясняющее суть задачи
      wrapWidth = 1.3
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    TextboxComponent entr_ans_tr
      bold = False
      borderColor = black
      borderWidth = 1
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      placeholder = Пишите здесь...
      size = (1, 0.06)
      startVal [time (s)] = 0.0
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    ButtonComponent button_entr_ans_tr
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (0.8, 0.06)
      text = Ответить
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  Routine tr_4
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    CodeComponent code_28
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
    TextComponent aha_quest_tr
      color = black
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = В момент нахождения ответа было ли у Вас “Ага-переживание”?
      wrapWidth = 1.3
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    ButtonComponent aha_quest_tr_yes
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.3, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Да
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    ButtonComponent aha_quest_tr_no
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.3, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Нет
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  Routine tr_5
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    CodeComponent code_29
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
    TextComponent conf_quest_tr
      color = black
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Уверены ли Вы в правильности своего ответа?
      wrapWidth = 1.3
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    ButtonComponent conf_quest_tr_yes
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.3, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Да
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    ButtonComponent conf_quest_tr_no
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.3, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Нет
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  Routine tr_6
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    CodeComponent code_10
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
      End Routine:
        if right_ans_quest_tr_yes.isClicked:
            trials_10.finished = True

        if right_ans_quest_tr_no.isClicked:
            nTr14 = 1
    TextComponent sen_txt_tr
      color = black
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Предложение: '+sen_tr
      wrapWidth = 1.3
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    TextComponent right_ans_txt_tr
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Правильный ответ: '+ans_tr
      wrapWidth = 1.3
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    TextComponent right_ans_quest_tr
      color = black
      letterHeight = 0.06
      pos = (0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Совпал ли Ваш ответ с правильным?
      wrapWidth = 1.3
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    ButtonComponent right_ans_quest_tr_yes
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.3, -0.15)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Да
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    ButtonComponent right_ans_quest_tr_no
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.3, -0.15)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Нет
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  Routine tr_7
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    CodeComponent code_30
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
      End Routine:
        if ind_aha_quest_tr_dont_und.isClicked:
            nTr16 = 0
        else:
            nTr16 = 1
    TextComponent ind_aha_quest_tr
      color = black
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Было ли у Вас “Ага-переживание” при знакомстве с ответом?
      wrapWidth = 1.3
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    ButtonComponent ind_aha_quest_tr_yes
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.3, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Да
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    ButtonComponent ind_aha_quest_tr_no
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.3, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Нет
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    ButtonComponent ind_aha_quest_tr_dont_und
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.15)
      size = (0.55, 0.1)
      startVal [time (s)] = 0.5
      text = Не понял ответ
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  Routine tr_8
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    CodeComponent code_31
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
      End Routine:
        if right_ans_quest_wout_ans_tr_dont_und.isClicked:
            nTr16 = 0
        else:
            nTr16 = 1
    TextComponent sen_txt_wout_ans_tr
      color = black
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Предложение: '+sen_tr
      wrapWidth = 1.3
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    TextComponent right_ans_wout_ans_txt_tr
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Правильный ответ: '+ans_tr
      wrapWidth = 1.3
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    TextComponent right_ans_quest_wout_ans_tr
      color = black
      letterHeight = 0.06
      pos = (0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Было ли у Вас “Ага-переживание” при знакомстве с ответом?
      wrapWidth = 1.3
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    ButtonComponent right_ans_quest_wout_ans_tr_yes
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.3, -0.15)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Да
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    ButtonComponent right_ans_quest_wout_ans_tr_no
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.3, -0.15)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Нет
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    ButtonComponent right_ans_quest_wout_ans_tr_dont_und
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.55, 0.1)
      startVal [time (s)] = 0.5
      text = Не понял ответ
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  Routine end_tr
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    TextComponent text_end_tr
      color = Black
      letterHeight = 0.08
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.8
      text = Тренировочный блок закончен
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  Routine inst_rep_1
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    CodeComponent code_11
      Code Type = Auto->JS
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      Begin Routine:
        head_rep_1.alignText = 'left'
        head_rep_1.italic = True
        body_rep_1.alignText = 'left'
      End Routine:
        if key_resp_10.keys == 'right':
            nTr22 = 1
    TextComponent num_inst_rep_1
      color = black
      letterHeight = 0.025
      pos = (0.725, 0.43)
      startVal [time (s)] = 0.0
      text = 1/4
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    TextComponent title_rep_1
      color = black
      letterHeight = 0.085
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Инструкция
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    TextComponent head_rep_1
      color = black
      letterHeight = 0.065
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = В чем суть заданий?
      wrapWidth = 1.4
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    TextComponent body_rep_1
      color = black
      letterHeight = 0.05
      pos = (0, -0.075)
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        Вам будут предъявляться неполные предложения
        с описанием некоторой ситуации.
        Ваша цель – понять, какое пропущено слово / словосочетание, поясняющее суть ситуации.

        Пример предложения:
        Стог сена был важен, потому что ткань порвалась
        Ответ:
        Парашют
    TextComponent text_arrow_tr_6
      color = black
      letterHeight = 0.03
      pos = (0, -0.455)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Используйте стрелки, чтобы перемещаться между листами инструкции
      wrapWidth = 1.6
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    PolygonComponent arrow_right_tr_5
      fillColor = white
      lineColor = black
      ori = 90
      pos = (0.75, -0.45)
      saveStartStop = False
      shape = arrow
      size = (0.03, 0.05)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_10
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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  Routine inst_rep_2
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    CodeComponent code_12
      Code Type = Auto->JS
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      Begin Routine:
        head_rep_2.alignText = 'left'
        head_rep_2.italic = True
        body_rep_2.alignText = 'left'
      End Routine:
        if key_resp_11.keys == 'right':
            nTr23 = 1

        elif key_resp_11.keys == 'left':
            nTr21 = 1
            nTr23 = 0
            nTr24 = 0
            nTr25 = 0
            nTr26 = 0
    TextComponent num_inst_rep_2
      color = black
      letterHeight = 0.025
      pos = (0.725, 0.43)
      startVal [time (s)] = 0.0
      text = 2/4
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    TextComponent title_rep_2
      color = black
      letterHeight = 0.085
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Инструкция
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    TextComponent head_rep_2
      color = black
      letterHeight = 0.065
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = Как отвечать?
      wrapWidth = 1.4
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    TextComponent body_rep_2
      color = black
      letterHeight = 0.05
      pos = (0, -0.022)
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        - Перед Вами появится предложение на 30 секунд.
        - Если Вы найдете решение (пропущенное слово) нажмите «ПРОБЕЛ»
        - После нажатия у Вас появиться поле, куда нужно вписать ответ.
        - Чтобы отправить ответ, нажмите мышкой на кнопку «ОТВЕТИТЬ»
    TextComponent text_arrow_tr_7
      color = black
      letterHeight = 0.03
      pos = (0, -0.455)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Используйте стрелки, чтобы перемещаться между листами инструкции
      wrapWidth = 1.6
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    PolygonComponent arrow_right_tr_6
      fillColor = white
      lineColor = black
      ori = 90
      pos = (0.75, -0.45)
      saveStartStop = False
      shape = arrow
      size = (0.03, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent arrow_left_tr_5
      fillColor = white
      lineColor = black
      ori = 270
      pos = (-0.75, -0.45)
      saveStartStop = False
      shape = arrow
      size = (0.03, 0.05)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_11
      allowedKeys = 'right','left'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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  Routine inst_rep_3
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    CodeComponent code_13
      Code Type = Auto->JS
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      Begin Routine:
        head_rep_3.alignText = 'left'
        head_rep_3.italic = True
        body_rep_3.alignText = 'left'
      End Routine:
        if key_resp_12.keys == 'right':
            nTr25 = 1

        elif key_resp_12.keys == 'left':
            nTr21 = 0
            nTr22 = 0
            nTr23 = 1
            nTr25 = 0
            nTr26 = 0
    TextComponent num_inst_rep_3
      color = black
      letterHeight = 0.025
      pos = (0.725, 0.43)
      startVal [time (s)] = 0.0
      text = 3/4
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    TextComponent title_rep_3
      color = black
      letterHeight = 0.085
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Инструкция
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    TextComponent head_rep_3
      color = black
      letterHeight = 0.065
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = Что будет после?
      wrapWidth = 1.4
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    TextComponent body_rep_3
      color = black
      letterHeight = 0.05
      pos = (0, -0.022)
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        1. Перед Вами появиться вопрос о том, испытали ли Вы «Ага-переживание» при нахождении ответа;
        2. После отчета о наличии / отсутствии «Ага-переживания» нужно будет оценить уверенность в своем ответе.

        Ответы нужно давать с помощью мышки, нажав на один из вариантов (да / нет)
    TextComponent text_arrow_tr_8
      color = black
      letterHeight = 0.03
      pos = (0, -0.455)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Используйте стрелки, чтобы перемещаться между листами инструкции
      wrapWidth = 1.6
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    PolygonComponent arrow_right_tr_7
      fillColor = white
      lineColor = black
      ori = 90
      pos = (0.75, -0.45)
      saveStartStop = False
      shape = arrow
      size = (0.03, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent arrow_left_tr_6
      fillColor = white
      lineColor = black
      ori = 270
      pos = (-0.75, -0.45)
      saveStartStop = False
      shape = arrow
      size = (0.03, 0.05)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_12
      allowedKeys = 'right','left'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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  Routine inst_rep_4
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    CodeComponent code_14
      Code Type = Auto->JS
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      Begin Routine:
        head_rep_4.alignText = 'left'
        head_rep_4.italic = True
        body_rep_4.alignText = 'left'
      End Routine:
        if key_resp_13.keys == 'right':
            nTr26 = 1

        elif key_resp_13.keys == 'left':
            nTr21 = 0
            nTr22 = 0
            nTr23 = 0
            nTr24 = 1
            nTr26 = 0
    TextComponent num_inst_rep_4
      color = black
      letterHeight = 0.025
      pos = (0.725, 0.43)
      startVal [time (s)] = 0.0
      text = 4/4
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    TextComponent title_rep_4
      color = black
      letterHeight = 0.085
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Инструкция
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    TextComponent head_rep_4
      color = black
      letterHeight = 0.065
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = Что после оценки уверенности?
      wrapWidth = 1.4
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    TextComponent body_rep_4
      color = black
      letterHeight = 0.05
      pos = (0, -0.022)
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text [set every repeat]:
        Появится правильный ответ, который нужно будет оценить, ответив на вопрос: «Совпадает ли он с Вашим?»

        Для ответа нажмите на один из вариантов:
        - Если нажмете «ДА», то появится следующая задача;
        - Если нажмете «НЕТ», то нужно будет оценить было ли «Ага-переживание» при знакомстве с ответом.
    TextComponent text_arrow_tr_9
      color = black
      letterHeight = 0.03
      pos = (0, -0.455)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Используйте стрелки, чтобы перемещаться между листами инструкции
      wrapWidth = 1.6
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    PolygonComponent arrow_right_tr_8
      fillColor = white
      lineColor = black
      ori = 90
      pos = (0.75, -0.45)
      saveStartStop = False
      shape = arrow
      size = (0.03, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent arrow_left_tr_7
      fillColor = white
      lineColor = black
      ori = 270
      pos = (-0.75, -0.45)
      saveStartStop = False
      shape = arrow
      size = (0.03, 0.05)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_13
      allowedKeys = 'right','left'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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  Routine inst_rep_5
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    CodeComponent code_16
      Code Type = Auto->JS
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      End Routine:
        if key_resp_14.keys == 'space':
            trials_14.finished = True
            nTr41 = 1

        elif key_resp_14.keys == 'left':
            nTr21 = 0
            nTr22 = 0
            nTr23 = 0
            nTr24 = 0
            nTr25 = 1
    TextComponent head_rep_5
      color = black
      letterHeight = 0.065
      startVal [time (s)] = 0.0
      text = Нажмите “ПРОБЕЛ”, чтобы завершить повторение инструкции
      wrapWidth = 1.3
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    TextComponent text_arrow_tr_10
      color = black
      letterHeight = 0.03
      pos = (0, -0.455)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Используйте стрелки, чтобы перемещаться между листами инструкции
      wrapWidth = 1.6
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    PolygonComponent arrow_left_tr_8
      fillColor = white
      lineColor = black
      ori = 270
      pos = (-0.75, -0.45)
      saveStartStop = False
      shape = arrow
      size = (0.03, 0.05)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_14
      allowedKeys = 'space','left'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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  Routine aha_rep_1
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    CodeComponent code_19
      Code Type = Auto->JS
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      Begin Routine:
        aha_body_rep_1.alignText = 'left'
      End Routine:
        if key_resp_16.keys == 'right':
            nTr32 = 1
    TextComponent num_aha_rep_1
      color = black
      letterHeight = 0.025
      pos = (0.725, 0.43)
      startVal [time (s)] = 0.0
      text = 1/2
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    TextComponent aha_title_rep_1
      color = black
      letterHeight = 0.085
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Описание “Ага-переживания”
      wrapWidth = 1.3
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    TextComponent aha_body_rep_1
      color = black
      letterHeight = 0.05
      pos = (0, 0.03)
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        Ага-переживание - это чувство «Эврики» или озарения, которое Вы можете испытать, когда внезапно понимаете решение задачи.
        Оно характеризуется переживанием внезапности перехода от непонимания к пониманию и позитивными эмоциями.

        Очень ярким примером Ага-переживания является история про Архимеда, который, решив задачу, выскочил из ванной и побежал голым по улице.
    TextComponent text_arrow_tr_11
      color = black
      letterHeight = 0.03
      pos = (0, -0.455)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Используйте стрелки, чтобы перемещаться между листами инструкции
      wrapWidth = 1.6
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    PolygonComponent arrow_right_tr_9
      fillColor = white
      lineColor = black
      ori = 90
      pos = (0.75, -0.45)
      saveStartStop = False
      shape = arrow
      size = (0.03, 0.05)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_16
      allowedKeys = 'right'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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  Routine aha_rep_3
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    CodeComponent code_17
      Code Type = Auto->JS
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      End Routine:
        if key_resp_15.keys == 'space':
            trials_20.finished = True
            nTr42 = 1

        elif key_resp_15.keys == 'left':
            nTr31 = 0
            nTr32 = 1
    TextComponent aha_head_rep_3
      color = black
      letterHeight = 0.065
      startVal [time (s)] = 0.0
      text = Нажмите “ПРОБЕЛ”, чтобы завершить повторение описания “Ага-переживания”
      wrapWidth = 1.3
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    TextComponent text_arrow_tr_13
      color = black
      letterHeight = 0.03
      pos = (0, -0.455)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Используйте стрелки, чтобы перемещаться между листами инструкции
      wrapWidth = 1.6
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    PolygonComponent arrow_left_tr_10
      fillColor = white
      lineColor = black
      ori = 270
      pos = (-0.75, -0.45)
      saveStartStop = False
      shape = arrow
      size = (0.03, 0.05)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_15
      allowedKeys = 'space','left'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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  Routine aha_rep_2
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    CodeComponent code_20
      Code Type = Auto->JS
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      Begin Routine:
        aha_body_rep_2.alignText = 'left'
      End Routine:
        if key_resp_17.keys == 'right':
            nTr33 = 1

        elif key_resp_17.keys == 'left':
            nTr33 = 0
            nTr31 = 1
    TextComponent num_aha_rep_2
      color = black
      letterHeight = 0.025
      pos = (0.725, 0.43)
      startVal [time (s)] = 0.0
      text = 2/2
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    TextComponent aha_title_rep_2
      color = black
      letterHeight = 0.085
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Примеры
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    TextComponent aha_body_rep_2
      color = black
      letterHeight = 0.05
      pos = (0, -0.022)
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        ☑ Отметьте, что испытали “Ага-переживание”:
        - Если самостоятельно найденный ответ был с ощущением внезапного понимания (Ага! Точно! Вот оно!);
        - Если прочитав предъявленный ответ Вы внезапно поняли, что он верный (Аааа! Так вот какой ответ!).

        ⮽ Отметьте, что НЕ испытали “Ага-переживание”:
        - Если самостоятельно найденный ответ был постепенным “шаг за шагом”;
        - Если прочитав предъявленный ответ Вы подумали, подставили его в предложение и поняли, что он верный.
    TextComponent text_arrow_tr_12
      color = black
      letterHeight = 0.03
      pos = (0, -0.455)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Используйте стрелки, чтобы перемещаться между листами инструкции
      wrapWidth = 1.6
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    PolygonComponent arrow_left_tr_9
      fillColor = white
      lineColor = black
      ori = 270
      pos = (-0.75, -0.45)
      saveStartStop = False
      shape = arrow
      size = (0.03, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent arrow_right_tr_10
      fillColor = white
      lineColor = black
      ori = 90
      pos = (0.75, -0.45)
      saveStartStop = False
      shape = arrow
      size = (0.03, 0.05)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_17
      allowedKeys = 'right','left'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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  Routine ans_inst_2
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    CodeComponent code_21
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
      End Routine:
        win.mouseVisible = False

        if inst_quest_no_2.isClicked:
            nTr50 = 0
            nTr49 = 0
            nTr48 = 0
    TextComponent inst_quest_2
      color = black
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Поняли ли Вы как решать задачи?
      wrapWidth = 1.3
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    ButtonComponent inst_quest_yes_2
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.3, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Да
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    ButtonComponent inst_quest_no_2
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.3, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Нет
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  Routine ans_aha_2
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    CodeComponent code_22
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
      End Routine:
        win.mouseVisible = False

        if aha_inst_quest_no_2.isClicked:
            nTr50 = 0
            nTr49 = 0
            nTr48 = 0
    TextComponent aha_quest_2
      color = black
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Поняли ли Вы что такое “Ага-переживание”?
      wrapWidth = 1.3
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    ButtonComponent aha_inst_quest_yes_2
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.3, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Да
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    ButtonComponent aha_inst_quest_no_2
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.3, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Нет
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  Routine ans_instr_1
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    CodeComponent code_15
      Code Type = Auto->JS
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      Begin Experiment:
        nTr20 = 0
        nTr21 = 1
        nTr22 = 1
        nTr23 = 1
        nTr24 = 1
        nTr25 = 1
        nTr26 = 1
        nTr41 = 0
        nTr50 = 1
        nTr49 = 1
        nTr48 = 1
      Begin Routine:
        win.mouseVisible = True
      End Routine:
        if inst_quest_no_1.isClicked:
            nTr20 = 99

        win.mouseVisible = False
    TextComponent inst_quest_1
      color = black
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Поняли ли Вы как решать задачи?
      wrapWidth = 1.3
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    ButtonComponent inst_quest_yes_1
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.3, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Да
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    ButtonComponent inst_quest_no_1
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.3, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Нет
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  Routine ans_aha_1
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    CodeComponent code_18
      Code Type = Auto->JS
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      Begin Experiment:
        nTr30 = 0
        nTr31 = 1
        nTr32 = 1
        nTr33 = 1
        nTr42 = 0
      Begin Routine:
        win.mouseVisible = True
      End Routine:
        if aha_inst_quest_no_1.isClicked:
            nTr30 = 99

        win.mouseVisible = False
    TextComponent aha_quest_1
      color = black
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Поняли ли Вы что такое “Ага-переживание”?
      wrapWidth = 1.3
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    ButtonComponent aha_inst_quest_yes_1
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.3, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Да
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    ButtonComponent aha_inst_quest_no_1
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.3, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Нет
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  Routine exp_1
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    TextComponent cross_exp
      color = black
      letterHeight = 0.085
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5
      text = +
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    CodeComponent code_23
      Code Type = Auto->JS
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      Begin Experiment:
        n_trial_exp = 0

        nTr51 = 0
        nTr52 = 0
        nTr53 = 0
        nTr54 = 0
        nTr55 = 0
        nTr56 = 0
        nTr57 = 0
        nTr58 = 0
        nTr59 = 0
        nTr60 = 0
      Begin Routine:
        win.mouseVisible = False
      End Routine:
        n_trial_exp += 1

        nTr51 = 0
        nTr52 = 0
        nTr53 = 0
        nTr54 = 0
        nTr55 = 0
        nTr56 = 0
        nTr57 = 0
        nTr58 = 0
        nTr59 = 0


        if n_trial_exp == 25:
            nTr60 = 1

        elif n_trial_exp == 50:
            nTr60 = 1

        else:
            nTr60 = 0
  Routine exp_2
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    TextComponent num_exp
      color = black
      letterHeight = 0.025
      pos = (0.725, 0.43)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      text [set every repeat] = $str(n_trial_exp)+'/'
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    TextComponent senten_exp
      color = black
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
      text [set every repeat] = $sen_exp
      wrapWidth = 1.3
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    TextComponent text_answ_exp
      color = black
      letterHeight = 0.035
      pos = (0, -0.4)
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 30.0
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      text:
        Нашел ответ
        “ПРОБЕЛ”
    KeyboardComponent key_resp_18
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.5
      stopVal [time (s)] = 30.0
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    TextComponent text_slow_exp
      color = Black
      letterHeight = 0.08
      startVal [time (s)] = 30.0
      stopVal [duration (s)] = 0.8
      text = Время закончилось
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    CodeComponent code_24
      Code Type = Auto->JS
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      End Routine:
        if key_resp_18.keys == 'space':
            nTr51 = 1
            nTr53 = 1

        else:
            nTr55 = 1
            nTr56 = 1
  Routine exp_3
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    CodeComponent code_25
      Code Type = JS
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      Begin JS Routine:
        psychoJS.window.mouseVisible = true;
      Each JS Frame:
        if ((entr_ans_exp.text && entr_ans_exp.text.trim())) {
            button_entr_ans_exp.setAutoDraw(true);
        } else {
            button_entr_ans_exp.setAutoDraw(false);
        }
    TextComponent entr_ans_txt_exp
      color = black
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Введите слово / словосочетание поясняющее суть задачи
      wrapWidth = 1.3
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    TextboxComponent entr_ans_exp
      bold = False
      borderColor = black
      borderWidth = 1
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      placeholder = Пишите здесь...
      size = (1, 0.06)
      startVal [time (s)] = 0.0
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    ButtonComponent button_entr_ans_exp
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.1)
      size = (0.8, 0.06)
      text = Ответить
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  Routine exp_4
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    CodeComponent code_32
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
    TextComponent aha_quest_exp
      color = black
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = В момент нахождения ответа было ли у Вас “Ага-переживание”?
      wrapWidth = 1.3
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    ButtonComponent aha_quest_exp_yes
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.3, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Да
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    ButtonComponent aha_quest_exp_no
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.3, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Нет
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  Routine exp_5
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    CodeComponent code_33
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
    TextComponent conf_quest_exp
      color = black
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Уверены ли Вы в правильности своего ответа?
      wrapWidth = 1.3
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    ButtonComponent conf_quest_exp_yes
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.3, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Да
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    ButtonComponent conf_quest_exp_no
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.3, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Нет
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  Routine exp_6
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    CodeComponent code_34
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
      End Routine:
        if right_ans_quest_exp_yes.isClicked:
            trials_29.finished = True

        if right_ans_quest_exp_no.isClicked:
            nTr54 = 1
    TextComponent sen_txt_exp
      color = black
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Предложение: '+sen_exp
      wrapWidth = 1.3
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    TextComponent right_ans_txt_exp
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Правильный ответ: '+ans_exp
      wrapWidth = 1.3
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    TextComponent right_ans_quest_exp
      color = black
      letterHeight = 0.06
      pos = (0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Совпал ли Ваш ответ с правильным?
      wrapWidth = 1.3
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    ButtonComponent right_ans_quest_exp_yes
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.3, -0.15)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Да
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    ButtonComponent right_ans_quest_exp_no
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.3, -0.15)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Нет
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  Routine exp_7
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    CodeComponent code_35
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
      End Routine:
        if ind_aha_quest_exp_dont_und.isClicked:
            nTr58 = 0

        else:
            nTr58 = 1
    TextComponent ind_aha_quest_exp
      color = black
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Было ли у Вас “Ага-переживание” при знакомстве с ответом?
      wrapWidth = 1.3
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    ButtonComponent ind_aha_quest_exp_yes
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.3, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Да
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    ButtonComponent ind_aha_quest_exp_no
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.3, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Нет
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    ButtonComponent ind_aha_quest_exp_dont_und
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.15)
      size = (0.55, 0.1)
      startVal [time (s)] = 0.5
      text = Не понял ответ
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  Routine exp_8
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    CodeComponent code_36
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
      End Routine:
        if right_ans_quest_wout_ans_exp_dont_und.isClicked:
            nTr59 = 0

        else:
            nTr59 = 1
    TextComponent sen_txt_wout_ans_exp
      color = black
      letterHeight = 0.05
      pos = (0, 0.35)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Предложение: '+sen_exp
      wrapWidth = 1.3
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    TextComponent right_ans_wout_ans_txt_exp
      color = black
      letterHeight = 0.05
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = $'Правильный ответ: '+ans_exp
      wrapWidth = 1.3
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    TextComponent right_ans_quest_wout_ans_exp
      color = black
      letterHeight = 0.06
      pos = (0, 0.05)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text [set every repeat] = Было ли у Вас “Ага-переживание” при знакомстве с ответом?
      wrapWidth = 1.3
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    ButtonComponent right_ans_quest_wout_ans_exp_yes
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.3, -0.15)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Да
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    ButtonComponent right_ans_quest_wout_ans_exp_no
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.3, -0.15)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Нет
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    ButtonComponent right_ans_quest_wout_ans_exp_dont_und
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.55, 0.1)
      startVal [time (s)] = 0.5
      text = Не понял ответ
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  Routine exp_pause
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    TextComponent title_exp_pause
      color = black
      letterHeight = 0.07
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = Если Вы устали, то можете отдохнуть 
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    TextComponent head_exp_pause
      color = black
      letterHeight = 0.065
      startVal [time (s)] = 0.0
      text = Нажмите “ПРОБЕЛ”, чтобы продолжить
      wrapWidth = 1.3
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    KeyboardComponent key_resp_20
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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  Routine start_exp
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    TextComponent aha_head_rep
      color = black
      letterHeight = 0.065
      startVal [time (s)] = 0.0
      text = Если готовы начать основной блок, нажмите “ПРОБЕЛ”
      wrapWidth = 1.3
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    KeyboardComponent key_resp_21
      allowedKeys = 'space','left'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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  Routine end
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    TextComponent text_end
      color = Black
      letterHeight = 0.08
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.8
      text = Спасибо за участие!
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  Routine end_exp
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    TextComponent text_end_exp
      color = Black
      letterHeight = 0.08
      startVal [time (s)] = 0
      stopVal [duration (s)] = 0.8
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      text:
        Основной блок завершен

        Осталось ответить на 5 вопросов
  Routine p_exp_int_1
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    CodeComponent code_27
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
      Each Frame:
        if entr_ans_int_1.text and entr_ans_int_1.text.strip():
            button_entr_ans_intr_1.setAutoDraw(True)
        else:
            button_entr_ans_intr_1.setAutoDraw(False)
    TextComponent entr_ans_txt_intr_1
      color = black
      letterHeight = 0.06
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Опишите, что Вы делали, чтобы найти ответ на задачу.
        Возникла ли у Вас какая-то стратегия, если да то какая?
    TextboxComponent entr_ans_intr_1
      bold = False
      borderColor = black
      borderWidth = 1
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      placeholder = Пишите здесь...
      pos = (0, -0.1)
      size = (1.3, 0.4)
      startVal [time (s)] = 0.0
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    ButtonComponent button_entr_ans_intr_1
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.8, 0.06)
      text = Ответить
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  Routine p_exp_int_2
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    CodeComponent code_37
      Code Type = Auto->JS
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      Begin Experiment:
        nTr61 = 0
      Begin Routine:
        win.mouseVisible = True
      End Routine:
        if aha_quest_intr_yes.isClicked:
            nTr61 = 1
    TextComponent entr_ans_txt_intr_2
      color = black
      letterHeight = 0.06
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Возникали ли у Вас “Ага-переживания” по ходу исследования?
      wrapWidth = 1.3
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    ButtonComponent aha_quest_intr_yes
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.3, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Да
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    ButtonComponent aha_quest_intr_no
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.3, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Нет
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  Routine p_exp_int_3
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    CodeComponent code_38
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True

        entr_ans_txt_intr_3_1.alignText = 'left'
      Each Frame:
        if entr_ans_int_3.text and entr_ans_int_3.text.strip():
            button_entr_ans_intr_3.setAutoDraw(True)
        else:
            button_entr_ans_intr_3.setAutoDraw(False)
    TextComponent entr_ans_txt_intr_3
      color = black
      letterHeight = 0.06
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Опишите на какие критерии Вы опирались, когда сообщали, что у Вас было “Ага-переживание”
      wrapWidth = 1.3
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    TextComponent entr_ans_txt_intr_3_1
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = При самостоятельном решении
      wrapWidth = 1.3
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    TextboxComponent entr_ans_intr_3
      bold = False
      borderColor = black
      borderWidth = 1
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      placeholder = Пишите здесь...
      pos = (0, -0.15)
      size = (1.3, 0.35)
      startVal [time (s)] = 0.0
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    ButtonComponent button_entr_ans_intr_3
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.8, 0.06)
      text = Ответить
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  Routine p_exp_int_4
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    CodeComponent code_39
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True

        entr_ans_txt_intr_4_1.alignText = 'left'
      Each Frame:
        if entr_ans_int_4.text and entr_ans_int_4.text.strip():
            button_entr_ans_intr_4.setAutoDraw(True)
        else:
            button_entr_ans_intr_4.setAutoDraw(False)
    TextComponent entr_ans_txt_intr_4
      color = black
      letterHeight = 0.06
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Опишите на какие критерии Вы опирались, когда сообщали, что у Вас было “Ага-переживание”
      wrapWidth = 1.3
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    TextComponent entr_ans_txt_intr_4_1
      color = black
      letterHeight = 0.05
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
      text = При знакомстве с правильным ответом
      wrapWidth = 1.3
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    TextboxComponent entr_ans_intr_4
      bold = False
      borderColor = black
      borderWidth = 1
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      placeholder = Пишите здесь...
      pos = (0, -0.15)
      size = (1.3, 0.35)
      startVal [time (s)] = 0.0
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    ButtonComponent button_entr_ans_intr_4
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.8, 0.06)
      text = Ответить
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  Routine p_exp_int_5
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    CodeComponent code_40
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
      Each Frame:
        if slider.getRating() is not None:
            button_entr_ans_intr_5.setAutoDraw(True)
        else:
            button_entr_ans_intr_5.setAutoDraw(False)
    TextComponent entr_ans_txt_intr_5
      color = black
      letterHeight = 0.06
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Оцените насколько сложно было решать задачи в основном блоке
      wrapWidth = 1.3
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    SliderComponent slider
      borderColor = LightGray
      color = red
      font = Noto Sans
      forceEndRoutine = False
      granularity = 1
      letterHeight = 0.05
      size = (1.0, 0.05)
      startVal [time (s)] = 0.0
      storeRatingTime = False
      styles = rating
      syncScreenRefresh = False
      ticks = (1, 5)
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    TextComponent text_easy
      color = black
      letterHeight = 0.025
      pos = (-0.5, -0.05)
      startVal [time (s)] = 0.0
      text = Очень просто
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    TextComponent text_hard
      color = black
      letterHeight = 0.025
      pos = (0.5, -0.05)
      startVal [time (s)] = 0.0
      text = Очень сложно
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    ButtonComponent button_entr_ans_intr_5
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.3)
      size = (0.8, 0.06)
      text = Ответить
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  Routine p_exp_int_6
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    CodeComponent code_41
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True

        entr_ans_txt_intr_3_1.alignText = 'left'
      Each Frame:
        if entr_ans_int_6.text and entr_ans_int_6.text.strip():
            button_entr_ans_intr_6.setAutoDraw(True)
        else:
            button_entr_ans_intr_6.setAutoDraw(False)
    TextComponent entr_ans_txt_intr_6
      color = black
      letterHeight = 0.06
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      wrapWidth = 1.3
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      text:
        Возникали ли у Вас какие-либо трудности во время решения задач?
        Если да, то какие?
    TextboxComponent entr_ans_intr_6
      bold = False
      borderColor = black
      borderWidth = 1
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      placeholder = Пишите здесь...
      pos = (0, -0.1)
      size = (1.3, 0.4)
      startVal [time (s)] = 0.0
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    ButtonComponent button_entr_ans_intr_6
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.8, 0.06)
      text = Ответить
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  Routine p_exp_int_7
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    CodeComponent code_42
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True

        entr_ans_txt_intr_3_1.alignText = 'left'
      Each Frame:
        if entr_ans_int_7.text and entr_ans_int_7.text.strip():
            button_entr_ans_intr_7.setAutoDraw(True)
        else:
            button_entr_ans_intr_7.setAutoDraw(False)
    TextComponent entr_ans_txt_intr_7
      color = black
      letterHeight = 0.06
      pos = (0, 0.3)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Свободное поле для ввода предложений / пожеланий
      wrapWidth = 1.3
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    TextboxComponent entr_ans_intr_7
      bold = False
      borderColor = black
      borderWidth = 1
      color = black
      editable = True
      fillColor = white
      letterHeight = 0.05
      placeholder = Пишите здесь...
      pos = (0, -0.1)
      size = (1.3, 0.4)
      startVal [time (s)] = 0.0
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    ButtonComponent button_entr_ans_intr_7
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0, -0.4)
      size = (0.8, 0.06)
      text = Ответить
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  Routine data_save
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    TextComponent text_data_save
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3.0
      text = Подождите, идет запись данных эксперимента
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    CodeComponent code_26
      Code Type = JS
      Begin JS Routine:
        // Отключаем стандартное сохранение
        psychoJS._saveResults = 0;

        // Формируем имя файла
        let filename = psychoJS._experiment._experimentName + '_' + psychoJS._experiment._datetime + '.csv';

        // Получаем все данные
        let dataObj = psychoJS._experiment._trialsData;

        // Составляем полный список компонентов
        let allKeys = [];

        dataObj.forEach(trial => {
            Object.keys(trial).forEach(key => {
                if (!allKeys.includes(key)) {
                    allKeys.push(key);
                }
            });
        });

        // Формируем CSV с заголовками
        let csv = allKeys.join(',') + '\n';

        dataObj.forEach(trial => {
            let row = allKeys.map(key => {
                let val = trial[key];
                // если значение undefined, ставим пустую строку
                return val !== undefined ? val : '';
            }).join(',');
            csv += row + '\n';
        });

        // Отправляем на OSF через DataPipe
        console.log('Saving data...');

        fetch('https://pipe.jspsych.org/api/data', {
            method: 'POST',
            headers: {
                'Content-Type': 'application/json',
                Accept: '*/*',
            },
            body: JSON.stringify({
                experimentID: 'woctwG5yByeU', // меняем на свой ID
                filename: filename,
                data: csv,
            }),
        })

        .then(response => response.json())
        .then(data => {
            console.log('Data saved:', data);
            quitPsychoJS();
        })

        .catch(err => {
            console.error('Error saving data:', err);
            quitPsychoJS();
        });
  Routine inst_tr7
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    CodeComponent code_43
      Code Type = Auto->JS
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      Begin Routine:
        head_tr_6.alignText = 'left'
        head_tr_6.italic = True
        body_tr.alignText = 'left'
      End Routine:
        if key_resp_8.keys == 'right':
            nTr4 = 1

        elif key_resp_8.keys == 'left':
            nTr1 = 0
            nTr2 = 1
            nTr4 = 0
            nTr5 = 0
            nTr6 = 0
            nTr7 = 0
    TextComponent num_inst_tr
      color = black
      letterHeight = 0.025
      pos = (0.725, 0.43)
      startVal [time (s)] = 0.0
      text = 3/6
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    TextComponent title_tr
      color = black
      letterHeight = 0.085
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Инструкция
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    TextComponent head_tr_6
      color = black
      letterHeight = 0.065
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = Если не успел найти решение?
      wrapWidth = 1.4
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    TextComponent body_tr
      color = black
      letterHeight = 0.05
      pos = (0, -0.075)
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        Если Вы не успели найти решение, то появится вопрос:
        «Ваш процесс решения задачи был перерван в состоянии тупика?»
        Тупик - это период времени, когда Вы не можете решить задачу и топчитесь на одном месте.

        Если ответите «ДА», то нужно будет выбрать тип тупика:
        - Застряла неверная идея;
        - Пустота (нет идей).
    TextComponent text_arrow_tr_14
      color = black
      letterHeight = 0.03
      pos = (0, -0.455)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Используйте стрелки, чтобы перемещаться между листами инструкции
      wrapWidth = 1.6
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    PolygonComponent arrow_right_tr_11
      fillColor = white
      lineColor = black
      ori = 90
      pos = (0.75, -0.45)
      saveStartStop = False
      shape = arrow
      size = (0.03, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent arrow_left_tr_11
      fillColor = white
      lineColor = black
      ori = 270
      pos = (-0.75, -0.45)
      saveStartStop = False
      shape = arrow
      size = (0.03, 0.05)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_8
      allowedKeys = 'right','left'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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  Routine instr_rep_6
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    CodeComponent code_44
      Code Type = Auto->JS
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      Begin Routine:
        head_tr_7.alignText = 'left'
        head_tr_7.italic = True
        body_tr_6.alignText = 'left'
      End Routine:
        if key_resp_9.keys == 'right':
            nTr24 = 1

        elif key_resp_9.keys == 'left':
            nTr21 = 0
            nTr22 = 1
            nTr24 = 0
            nTr25 = 0
            nTr26 = 0
    TextComponent num_inst_tr_6
      color = black
      letterHeight = 0.025
      pos = (0.725, 0.43)
      startVal [time (s)] = 0.0
      text = 3/6
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    TextComponent title_tr_6
      color = black
      letterHeight = 0.085
      pos = (0, 0.4)
      startVal [time (s)] = 0.0
      text = Инструкция
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    TextComponent head_tr_7
      color = black
      letterHeight = 0.065
      pos = (0, 0.25)
      startVal [time (s)] = 0.0
      text = Если не успел найти решение?
      wrapWidth = 1.4
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    TextComponent body_tr_6
      color = black
      letterHeight = 0.05
      pos = (0, -0.075)
      startVal [time (s)] = 0.0
      wrapWidth = 1.4
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      text:
        Если Вы не успели найти решение, то появится вопрос:
        «Ваш процесс решения задачи был перерван в состоянии тупика?»
        Тупик - это период времени, когда Вы не можете решить задачу и топчитесь на одном месте.

        Если ответите «ДА», то нужно будет выбрать тип тупика:
        - Застряла неверная идея;
        - Пустота (нет идей).
    TextComponent text_arrow_tr_15
      color = black
      letterHeight = 0.03
      pos = (0, -0.455)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Используйте стрелки, чтобы перемещаться между листами инструкции
      wrapWidth = 1.6
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    PolygonComponent arrow_right_tr_12
      fillColor = white
      lineColor = black
      ori = 90
      pos = (0.75, -0.45)
      saveStartStop = False
      shape = arrow
      size = (0.03, 0.05)
      startVal [time (s)] = 0.0
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    PolygonComponent arrow_left_tr_12
      fillColor = white
      lineColor = black
      ori = 270
      pos = (-0.75, -0.45)
      saveStartStop = False
      shape = arrow
      size = (0.03, 0.05)
      startVal [time (s)] = 0.0
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    KeyboardComponent key_resp_9
      allowedKeys = 'right','left'
      forceEndRoutine = True
      startVal [time (s)] = 0.1
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  Routine tr_9
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    CodeComponent code_47
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
      End Routine:
        if no_impass_tr.isClicked:
            nTr19 = 0

        elif yes_impass_tr.isClicked:
            nTr19 = 1
    TextComponent impass_txt_tr
      color = black
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text = Ваш процесс решения задачи был перерван в состоянии тупика?
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    ButtonComponent yes_impass_tr
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.3, -0.15)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Да
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    ButtonComponent no_impass_tr
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.3, -0.15)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Нет
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  Routine tr_10
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    CodeComponent code_48
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
    TextComponent type_impass_txt_tr
      color = black
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text = Выберете тип тупика
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    ButtonComponent type_impass_confl_tr
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.35, -0.1)
      size = (0.57, 0.14)
      startVal [time (s)] = 0.5
      text = Застряла неверная идея
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    ButtonComponent type_impass_empty_tr
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.35, -0.1)
      size = (0.57, 0.14)
      startVal [time (s)] = 0.5
      text = Пустота (нет идей)
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  Routine routine_1
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    CodeComponent code_45
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
    TextComponent like_quest_tr
      color = black
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Понравилось ли Вам предложение?
      wrapWidth = 1.3
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    ButtonComponent like_quest_tr_yes
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.3, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Да
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    ButtonComponent like_quest_tr_no
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.3, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Нет
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  Routine routine
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    CodeComponent code_46
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
    TextComponent like_quest_tr_2
      color = black
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Понравилось ли Вам предложение?
      wrapWidth = 1.3
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    ButtonComponent like_quest_wout_ans_tr_yes
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.3, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Да
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    ButtonComponent like_quest_wout_ans_tr_no
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.3, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Нет
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  Routine routine_2
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    CodeComponent code_51
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
      End Routine:
        if no_impass_tr_2.isClicked:
            nTr57 = 0

        elif yes_impass_tr_2.isClicked:
            nTr57 = 1
    TextComponent impass_txt_tr_2
      color = black
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text = Ваш процесс решения задачи был перерван в состоянии тупика?
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    ButtonComponent yes_impass_tr_2
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.3, -0.15)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Да
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    ButtonComponent no_impass_tr_2
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.3, -0.15)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Нет
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  Routine routine_3
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    CodeComponent code_52
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
    TextComponent type_impass_txt
      color = black
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      syncScreenRefresh = False
      text = Выберете тип тупика
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    ButtonComponent type_impass_confl
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.35, -0.1)
      size = (0.57, 0.14)
      startVal [time (s)] = 0.5
      text = Застряла неверная идея
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    ButtonComponent type_impass_empty
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.35, -0.1)
      size = (0.57, 0.14)
      startVal [time (s)] = 0.5
      text = Пустота (нет идей)
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  Routine routine_4
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    CodeComponent code_49
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
    TextComponent like_quest
      color = black
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Понравилось ли Вам предложение?
      wrapWidth = 1.3
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    ButtonComponent like_quest_yes
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.3, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Да
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    ButtonComponent like_quest_no
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.3, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Нет
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  Routine routine_5
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    CodeComponent code_50
      Code Type = Auto->JS
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      Begin Routine:
        win.mouseVisible = True
    TextComponent like_quest_2
      color = black
      letterHeight = 0.07
      pos = (0, 0.2)
      saveStartStop = False
      startVal [time (s)] = 0.0
      text = Понравилось ли Вам предложение?
      wrapWidth = 1.3
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    ButtonComponent like_quest_wout_ans_yes
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (-0.3, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Да
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    ButtonComponent like_quest_wout_ans_no
      bold = False
      borderColor = black
      color = black
      fillColor = lightgray
      forceEndRoutine = True
      letterHeight = 0.05
      pos = (0.3, 0)
      size = (0.3, 0.1)
      startVal [time (s)] = 0.5
      text = Нет
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Flow
  LoopInitiator trials_1 loopType="TrialHandler"
    loopType = random
    nReps = 99
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    LoopInitiator trials_2 loopType="TrialHandler"
      loopType = random
      nReps = nTr1
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      Routine instr_tr_1
    LoopTerminator trials_2
    LoopInitiator trials_3 loopType="TrialHandler"
      loopType = random
      nReps = nTr2
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      Routine instr_tr_2
    LoopTerminator trials_3
    LoopInitiator trials_35 loopType="TrialHandler"
      loopType = random
      nReps = nTr3
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      Routine inst_tr7
    LoopTerminator trials_35
    LoopInitiator trials_4 loopType="TrialHandler"
      loopType = random
      nReps = nTr4
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      Routine instr_tr_3
    LoopTerminator trials_4
    LoopInitiator trials_5 loopType="TrialHandler"
      loopType = random
      nReps = nTr5
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      Routine instr_tr_4
    LoopTerminator trials_5
    LoopInitiator trials_6 loopType="TrialHandler"
      loopType = random
      nReps = nTr6
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      Routine instr_tr_5
    LoopTerminator trials_6
    LoopInitiator trials_7 loopType="TrialHandler"
      loopType = random
      nReps = nTr7
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      Routine instr_tr_6
    LoopTerminator trials_7
  LoopTerminator trials_1
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = stim_tr.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'sen_tr': 'Старик жаловался на кости, потому что у него было мало очков', 'ans_tr': 'игральные'},
      {'sen_tr': 'Мужчина остался без денег, потому что колесо не вовремя остановилось', 'ans_tr': 'рулетка'},
      {'sen_tr': 'Таксист не знал куда ехать, потому что закончился трафик', 'ans_tr': 'мобильный'},
      {'sen_tr': 'Друзья не встретились, потому что сели на разные ветки', 'ans_tr': 'метро'},
      {'sen_tr': 'Кролика не показали, потому что дно было порвано', 'ans_tr': 'фокус'}]
    Routine tr_1
    Routine tr_2
    LoopInitiator trials_37 loopType="TrialHandler"
      loopType = random
      nReps = nTr18
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      Routine tr_9
      LoopInitiator trials_38 loopType="TrialHandler"
        loopType = random
        nReps = nTr19
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        Routine tr_10
      LoopTerminator trials_38
    LoopTerminator trials_37
    LoopInitiator trials_8 loopType="TrialHandler"
      loopType = random
      nReps = nTr11
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      Routine tr_3
      Routine tr_4
      Routine tr_5
    LoopTerminator trials_8
    LoopInitiator trials_10 loopType="TrialHandler"
      loopType = random
      nReps = nTr13
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      Routine tr_6
      LoopInitiator trials_11 loopType="TrialHandler"
        loopType = random
        nReps = nTr14
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        Routine tr_7
      LoopTerminator trials_11
      LoopInitiator trials_9 loopType="TrialHandler"
        loopType = random
        nReps = nTr16
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        Routine routine_1
      LoopTerminator trials_9
    LoopTerminator trials_10
    LoopInitiator trials_12 loopType="TrialHandler"
      loopType = random
      nReps = nTr15
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      Routine tr_8
      LoopInitiator trials_39 loopType="TrialHandler"
        loopType = random
        nReps = nTr17
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        Routine routine
      LoopTerminator trials_39
    LoopTerminator trials_12
  LoopTerminator trials
  Routine end_tr
  Routine ans_instr_1
  LoopInitiator trials_14 loopType="TrialHandler"
    loopType = random
    nReps = nTr20
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    LoopInitiator trials_15 loopType="TrialHandler"
      loopType = random
      nReps = nTr21
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      Routine inst_rep_1
    LoopTerminator trials_15
    LoopInitiator trials_16 loopType="TrialHandler"
      loopType = random
      nReps = nTr22
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      Routine inst_rep_2
    LoopTerminator trials_16
    LoopInitiator trials_36 loopType="TrialHandler"
      loopType = random
      nReps = nTr23
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      Routine instr_rep_6
    LoopTerminator trials_36
    LoopInitiator trials_17 loopType="TrialHandler"
      loopType = random
      nReps = nTr24
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      Routine inst_rep_3
    LoopTerminator trials_17
    LoopInitiator trials_18 loopType="TrialHandler"
      loopType = random
      nReps = nTr25
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      Routine inst_rep_4
    LoopTerminator trials_18
    LoopInitiator trials_19 loopType="TrialHandler"
      loopType = random
      nReps = nTr26
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      Routine inst_rep_5
    LoopTerminator trials_19
  LoopTerminator trials_14
  Routine ans_aha_1
  LoopInitiator trials_20 loopType="TrialHandler"
    loopType = random
    nReps = nTr30
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    LoopInitiator trials_21 loopType="TrialHandler"
      loopType = random
      nReps = nTr31
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      Routine aha_rep_1
    LoopTerminator trials_21
    LoopInitiator trials_22 loopType="TrialHandler"
      loopType = random
      nReps = nTr32
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      Routine aha_rep_2
    LoopTerminator trials_22
    LoopInitiator trials_23 loopType="TrialHandler"
      loopType = random
      nReps = nTr33
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      Routine aha_rep_3
    LoopTerminator trials_23
  LoopTerminator trials_20
  LoopInitiator trials_24 loopType="TrialHandler"
    loopType = random
    nReps = nTr41
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    Routine ans_inst_2
  LoopTerminator trials_24
  LoopInitiator trials_25 loopType="TrialHandler"
    loopType = random
    nReps = nTr42
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    Routine ans_aha_2
  LoopTerminator trials_25
  LoopInitiator trials_33 loopType="TrialHandler"
    loopType = random
    nReps = nTr49
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    Routine start_exp
  LoopTerminator trials_33
  LoopInitiator trials_26 loopType="TrialHandler"
    conditionsFile = stim_exp.xlsx
    loopType = random
    nReps = nTr50
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    conditions:
      [{'sen_exp': 'Стрелки были неровные, потому что доска сломалась', 'ans_exp': 'глажка'},
      {'sen_exp': 'Завтрак удался, потому что нити были липкими\xa0\xa0\xa0\xa0', 'ans_exp': 'паутина'},
      {'sen_exp': 'Батареи были бесполезны, потому что небо затянуло тучами', 'ans_exp': 'солнечные'},
      {'sen_exp': 'Контейнер не загрузили, потому что сеть оборвалась', 'ans_exp': 'рыба'},
      {'sen_exp': 'Улица была в ямах, потому что вращение остановилось', 'ans_exp': 'каток'},
      {'sen_exp': 'Сыр был ровно нарезан, потому что камень оказался под рукой', 'ans_exp': 'точило'},
      {'sen_exp': 'Ребёнок обернулся, потому что его домашний питомец заговорил', 'ans_exp': 'попугай'},
      {'sen_exp': 'Мужчина поправился, потому что ему освободили стол', 'ans_exp': 'операция'},
      {'sen_exp': 'Мужчине пришлось проявить мужество, потому что спичка была сломана', 'ans_exp': 'жребий'},
      {'sen_exp': 'В зале было шумно, потому что молоток сломался', 'ans_exp': 'судья'},
      {'sen_exp': 'Люди поднимались вверх, потому что мешки сбросили', 'ans_exp': 'дирижабль'},
      {'sen_exp': 'Свист прекратился, потому что огонь погасили', 'ans_exp': 'чайник'},
      {'sen_exp': 'Кони были съедены, но это не спасло ситуацию', 'ans_exp': 'шахматы'},
      {'sen_exp': 'Свет погас, потому что звонков было три', 'ans_exp': 'театр'},
      {'sen_exp': 'Порт был затоплен, потому что диск приблизился', 'ans_exp': 'луна'},
      {'sen_exp': 'Стояла полная тишина, потому что палочка не двигалась', 'ans_exp': 'дирижер'}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
    LoopInitiator trials_32 loopType="TrialHandler"
      loopType = random
      nReps = nTr60
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      Routine exp_pause
    LoopTerminator trials_32
    Routine exp_1
    Routine exp_2
    LoopInitiator trials_28 loopType="TrialHandler"
      loopType = random
      nReps = nTr56
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      Routine routine_2
      LoopInitiator trials_40 loopType="TrialHandler"
        loopType = random
        nReps = nTr57
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        Routine routine_3
      LoopTerminator trials_40
    LoopTerminator trials_28
    LoopInitiator trials_27 loopType="TrialHandler"
      loopType = random
      nReps = nTr51
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      Routine exp_3
      Routine exp_4
      Routine exp_5
    LoopTerminator trials_27
    LoopInitiator trials_29 loopType="TrialHandler"
      loopType = random
      nReps = nTr53
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      Routine exp_6
      LoopInitiator trials_30 loopType="TrialHandler"
        loopType = random
        nReps = nTr54
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        Routine exp_7
      LoopTerminator trials_30
      LoopInitiator trials_41 loopType="TrialHandler"
        loopType = random
        nReps = nTr58
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        Routine routine_4
      LoopTerminator trials_41
    LoopTerminator trials_29
    LoopInitiator trials_13 loopType="TrialHandler"
      loopType = random
      nReps = nTr55
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      Routine exp_8
      LoopInitiator trials_42 loopType="TrialHandler"
        loopType = random
        nReps = nTr59
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        Routine routine_5
      LoopTerminator trials_42
    LoopTerminator trials_13
  LoopTerminator trials_26
  LoopInitiator trials_34 loopType="TrialHandler"
    loopType = random
    nReps = nTr48
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    Routine end_exp
    Routine p_exp_int_1
    Routine p_exp_int_2
    LoopInitiator trials_31 loopType="TrialHandler"
      loopType = random
      nReps = nTr61
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      Routine p_exp_int_3
      Routine p_exp_int_4
    LoopTerminator trials_31
    Routine p_exp_int_5
    Routine p_exp_int_6
    Routine p_exp_int_7
  LoopTerminator trials_34
  Routine end
  Routine data_save
